// User input
import org.micromanager.PositionList;
import org.micromanager.MultiStagePosition;              
import org.micromanager.data.Coordinates;
import org.micromanager.acquisition.SequenceSettings;
import org.micromanager.data.Datastore;
import org.micromanager.acquisition;
//////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////
/* USER INPUT */
// file locations
Name = "test-RectangleSpectralMap";
rootDirName = "C:/Users/hiros/Desktop/Boris-TEST/26-3-2026";

boolean unidirectional = false; // <-- set this to false for bidirectional

//acquisition parameters
double stepSizeXY = 1;
double areaX = 20; //in um (one side) 
double areaY = 10; //in um (one side) 
int exposure = 200;   // ms

// define acquisition parameters
int numFrames = 1; //per position

//Camera SETUP
height = 30;//px
x = 0;//px
y = 242-height/2;//px
width  = 640; //px = full width

// Now the nSteps odd isn't use to define the stepRange, which is defined with absolute number so the center may be
// shifted by half a step size (~500 nm for 1um step). To be fixed

/* END USER INPUT */
/////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////


//ensure no overwrite of file path:
baseName = Name;
saveName = baseName;

int counter = 1;
File dir = new File(rootDirName + '/' + saveName);

while (dir.exists()) {
    saveName = baseName + "_" + counter;
    dir = new File(rootDirName + '/' + saveName);
    counter++;
}

// Camera 1
mmc.setCameraDevice("NIRvana HS - X115480925");
mmc.setExposure(exposure);
mmc.setROI(x,y,width,height);

// get the number of step for the scanning (number of positions)
int nStepsX = (int) Math.round(areaX / stepSizeXY);
int nStepsY = (int) Math.round(areaY / stepSizeXY);


// Force odd number of steps so center is included
if (nStepsX % 2 == 0) {
    nStepsX += 1;
}

// Force odd number of steps so center is included
if (nStepsY % 2 == 0) {
    nStepsY += 1;
}


double totalPoint = nStepsX*nStepsY;


// Create XY position list
xyStage = mmc.getXYStageDevice();
zStage = mmc.getFocusDevice();

xyPos   = mmc.getXYStagePosition();
double centerX = xyPos.getX();
double centerY = xyPos.getY();

double gridWidthX = (nStepsX - 1) * stepSizeXY;
double gridWidthY = (nStepsY - 1) * stepSizeXY;

double startX = centerX - gridWidthX / 2.0;
double startY = centerY - gridWidthY / 2.0;


print("CenterX: " + centerX);
print("CenterY: " + centerY);

print("StartX: " + startX);
print("StartY: " + startY);


double zPos = mmc.getPosition(zStage);

PositionList pl = new PositionList();

int nPos = 0;

for (int row = 0; row < nStepsY; row++) {

    double y = startY + row * stepSizeXY;

    for (int col = 0; col < nStepsX; col++) {

        double x;

        if (unidirectional) {
            // Unidirectional (always left to right)
            x = startX + col * stepSizeXY;
        } else {
        	 // Bidirectional (serpentine) scanning
            if (row % 2 == 0) {
                // Even rows: left to right
                x = startX + col * stepSizeXY;
            } else {
                // Odd rows: right to left
                x = startX + (nStepsX - 1 - col) * stepSizeXY;
            }
        }
			
		MultiStagePosition msp = new MultiStagePosition(xyStage, x, y, zStage, zPos);

		msp.setLabel("Pos" + i);
		msp.setProperty("Slide","Number "+ i);
		pl.addPosition(msp);
		nPos++;
		
	}	
}

mm.getPositionListManager().setPositionList(pl);
String[] acqs = new String[pl.getNumberOfPositions()];

// Check at Tools - StagePosition list

// Acquire with the generated position list
sequenceSettings = mm.acquisitions().getAcquisitionSettings();
sb = new SequenceSettings.Builder(sequenceSettings);
// use position list
sb.usePositionList(true);

// number of time frames
sb.numFrames(numFrames);


// save options
sb.save(true);
sb.root(rootDirName);
sb.prefix(saveName);

// MPIFF format (multipage TIFF) <under construction>
sb.saveMode(org.micromanager.data.Datastore.SaveMode.MULTIPAGE_TIFF);

// build settings object
SequenceSettings settings = sb.build();
// ------------------
// Run Acquisition
// ------------------
Datastore store = mm.acquisitions().runAcquisitionWithSettings(settings, true);


//coming back to the original position
mmc.setXYPosition(xyStage, centerX, centerY);
mmc.setPosition(zStage, zPos);
mmc.waitForDevice(xyStage);
mmc.waitForDevice(zStage);


xyPos   = mmc.getXYStagePosition();
double centerX = xyPos.getX();
double centerY = xyPos.getY();
print("CenterX: " + centerX);
print("CenterY: " + centerY);





